%YAML 1.1
---
# yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
WaveformSettings: &waveform_settings_spec
  cycles:
    offset: 0
    length: 4
    interfaceType: uint
    defaultValue: 1
  duration_us:
    offset: 4
    length: 4
    interfaceType: uint
    defaultValue: 0
  update_frequency_hz:
    offset: 8
    length: 4
    interfaceType: uint
    defaultValue: 500000
FileSettingsSpec: &file_settings_spec
  <<: *waveform_settings_spec
  path:
    offset: 12
    length: 32
    interfaceType: string
FunctionSettings: &function_settings_spec
  <<: *waveform_settings_spec
  frequency_hz:
    offset: 12
    length: 4
    interfaceType: uint
    defaultValue: 1
  amplitude_volts:
    offset: 16
    length: 4
    minValue: 0
    maxValue: 10
    interfaceType: float
    defaultValue: 1
  vertical_shift_volts:
    offset: 20
    length: 4
    interfaceType: float
    defaultValue: 1
TrapezoidSettings: &trapezoid_settings_spec
  <<: *function_settings_spec
  ramp_on_us:
    offset: 24
    length: 4
    interfaceType: uint
    defaultValue: 0
  ramp_off_us:
    offset: 28
    length: 4
    interfaceType: uint
    defaultValue: 0
device: quac
whoAmI: 1411
firmwareVersion: "0.1"
hardwareTargets: "1.1"
registers:
  DOPortState:
    address: 32
    type: U8
    access: Write
    maskType: DOPort
    description: "Read or write the state of the digital IO pins."
  DOPortSet:
    address: 33
    type: U8
    access: Write
    maskType: DOPort
    description: "Set digital IO pins specified in the mask to logic HIGH by
      setting the corresponding bit."
  DOPortClear:
    address: 34
    type: U8
    access: Write
    maskType: DOPort
    description: "Set digital IO specified pins in the mask to logic LOW by
      setting the corresponding bit."

  ExtTriggerState:
    address: 35
    type: U8
    access: Read
    maskType: DOPort
    description: "Read the raw state of the external trigger pins."

  AOPortState:
    address: 36
    type: Float
    access: Write
    length: 4
    description: "Read/Write the analog output voltage of all 4 Analog
      output channels.
      Warning: Write values only take effect if all analog output
      channels are not busy playing a preset waveform. Write error
      otherwise.
      Warning: Read values are only valid if all analog output
      channels are not busy playing a preset waveform. Read error
      otherwise."

  AOChannel0:
    address: 37
    type: Float
    access: Write
    minValue: -10
    maxValue: 10
    defaultValue: 0
    description: "Read/Set the voltage value of analog output channel 0.
      Warning: Write values only take effect if the analog output
      channel is not busy playing a preset waveform. Write error
      otherwise.
      Warning: Returns a READ_ERROR if any AO channel is currently
      busy playing a preset waveform."

  AOChannel1:
    address: 38
    type: Float
    access: Write
    minValue: -10
    maxValue: 10
    defaultValue: 0
    description: "Read/Set the voltage value of analog output channel 1.
      Warning: Write values only take effect if this channel is not
      busy playing a preset waveform. Write error otherwise.
      Warning: Returns a READ_ERROR if any AO channel is currently
      busy playing a preset waveform."

  AOChannel2:
    address: 39
    type: Float
    access: Write
    minValue: -10
    maxValue: 10
    defaultValue: 0
    description: "Read/Set the voltage value of analog output channel 2.
      Warning: Write values only take effect if this channel is not
      busy playing a preset waveform. Write error otherwise.
      Warning: Returns a READ_ERROR if any AO channel is currently
      busy playing a preset waveform."

  AOChannel3:
    address: 40
    type: Float
    access: Write
    minValue: -10
    maxValue: 10
    defaultValue: 0
    description: "Read/Set the voltage value of analog output channel 3.
      Warning: Write values only take effect if this channel is not
      busy playing a preset waveform. Write error otherwise.
      Warning: Returns a READ_ERROR if any AO channel is currently
      busy playing a preset waveform."

  DacReady:
    address: 41
    type: U8
    access: Read
    maskType: AOPort
    description: ""

  DacStart:
    address: 42
    type: U8
    access: Write, Event
    maskType: AOPort
    description: "Write to this register to start any/all ready channels.
      Events received from this register represent a bitmask of
      channels started via external trigger."

  DacPause:
    address: 43
    type: U8
    access: Write
    maskType: AOPort
    description: "Write to this register to pause/resume any/all busy channels.
      Writing a 1 pauses the corresponding channel. Writing a 0
      resumes the corresponding channel."

  DacAbort:
    address: 44
    type: U8
    access: Write
    maskType: AOPort
    description: ""

  DacFinished:
    address: 45
    type: U8
    access: Event
    maskType: AOPort
    description: ""

  ChannelExternalTriggers0:
    address: 46
    type: U8
    access: Write
    maskType: DOPort
    description: "For Analog 0utput Channel 0, which Digital
      Input pins, specified by mask, can trigger the channel
      to start."
  ChannelExternalTriggers1:
    address: 47
    type: U8
    access: Write
    maskType: DOPort
    description: "For Analog Output Channel 1, which Digital
      Input pins, specified by mask, can trigger the channel
      to start."
  ChannelExternalTriggers2:
    address: 48
    type: U8
    access: Write
    maskType: DOPort
    description: "For Analog Output Channel 2, which Digital
      Input pins, specified by mask, can trigger the channel
      to start."
  ChannelExternalTriggers3:
    address: 49
    type: U8
    access: Write
    maskType: DOPort
    description: "For Analog Output Channel 3, which Digital
      Input pins, specified by mask, can trigger the channel
      to start."

  ActivePlayers0:
    address: 50
    type: U8
    access: Write
    description: "For Analog Output Channel 0, which waveform
      player is active: file, sine, or trapezoid."
    payloadSpec:
      Player:
        offset: 0
        maskType: PlayerType
  ActivePlayers1:
    address: 51
    type: U8
    access: Write
    description: "For Analog Output Channel 1, which waveform
      player is active: file, sine, or trapezoid."
    payloadSpec:
      Player:
        offset: 0
        maskType: PlayerType
  ActivePlayers2:
    address: 52
    type: U8
    access: Write
    description: "For Analog Output Channel 2, which waveform
      player is active: file, sine, or trapezoid."
    payloadSpec:
      Player:
        offset: 0
        maskType: PlayerType
  ActivePlayers3:
    address: 53
    type: U8
    access: Write
    description: "For Analog Output Channel 3, which waveform
      player is active: file, sine, or trapezoid."
    payloadSpec:
      Player:
        offset: 0
        maskType: PlayerType

  FileSettings0:
    address: 54
    type: U8
    access: Write
    length: 45
    description: "Struct to configure Analog Output Channel 0
      File Player settings: cycles (U32), duration_us (U32),
      update_frequency_hz (U32), path (U8 array, 33 elements)"
    payloadSpec:
      <<: *file_settings_spec
  FileSettings1:
    address: 55
    type: U8
    access: Write
    length: 45
    description: "Struct to configure Analog Output Channel 1
      File Player settings: cycles (U32), duration_us (U32),
      update_frequency_hz (U32), path (U8 array, 33 elements)"
    payloadSpec:
      <<: *file_settings_spec
  FileSettings2:
    address: 56
    type: U8
    access: Write
    length: 45
    description: "Struct to configure Analog Output Channel 2
      File Player settings: cycles (U32), duration_us (U32),
      update_frequency_hz (U32), path (U8 array, 33 elements)"
    payloadSpec:
      <<: *file_settings_spec
  FileSettings3:
    address: 57
    type: U8
    access: Write
    length: 45
    description: "Struct to configure Analog Output Channel 3
      File Player settings: cycles (U32), duration_us (U32),
      update_frequency_hz (U32), path (U8 array, 33 elements)"
    payloadSpec:
      <<: *file_settings_spec
  SineSettings0:
    address: 58
    type: U8
    access: Write
    length: 24
    description: "Struct to configure Analog Output Channel 0
      Sine Player settings: cycles (U32), duration_us (U32),
      update_frequency_hz (U32), frequency_hz (U32),
      amplitude_volts (Float), vertical_shift_volts (Float)."
    payloadSpec:
      <<: *function_settings_spec
  SineSettings1:
    address: 59
    type: U8
    access: Write
    length: 24
    description: "Struct to configure Analog Output Channel 1
      Sine Player settings: cycles (U32), duration_us (U32),
      update_frequency_hz (U32), frequency_hz (U32),
      amplitude_volts (Float), vertical_shift_volts (Float)."
    payloadSpec:
      <<: *function_settings_spec
  SineSettings2:
    address: 60
    type: U8
    access: Write
    length: 24
    description: "Struct to configure Analog Output Channel 2
      Sine Player settings: cycles (U32), duration_us (U32),
      update_frequency_hz (U32), frequency_hz (U32),
      amplitude_volts (Float), vertical_shift_volts (Float)."
    payloadSpec:
      <<: *function_settings_spec
  SineSettings3:
    address: 61
    type: U8
    access: Write
    length: 24
    description: "Struct to configure Analog Output Channel 3
      Sine Player settings: cycles (U32), duration_us (U32),
      update_frequency_hz (U32), frequency_hz (U32),
      amplitude_volts (Float), vertical_shift_volts (Float)."
    payloadSpec:
      <<: *function_settings_spec

  TrapezoidSettings0:
    address: 62
    type: U8
    access: Write
    length: 32
    description: "Struct to configure Analog Output Channel 0
      Trapezoid Player settings: cycles (U32), duration_us (U32),
      update_frequency_hz (U32), frequency_hz (U32),
      amplitude_volts (Float), vertical_shift_volts (Float),
      ramp_on_us (U32), ramp_off_us (U32)"
    payloadSpec:
      <<: *trapezoid_settings_spec
  TrapezoidSettings1:
    address: 63
    type: U8
    access: Write
    length: 32
    description: "Struct to configure Analog Output Channel 1
      Trapezoid Player settings: cycles (U32), duration_us (U32),
      update_frequency_hz (U32), frequency_hz (U32),
      amplitude_volts (Float), vertical_shift_volts (Float),
      ramp_on_us (U32), ramp_off_us (U32)"
    payloadSpec:
      <<: *trapezoid_settings_spec
  TrapezoidSettings2:
    address: 64
    type: U8
    access: Write
    length: 32
    description: "Struct to configure Analog Output Channel 2
      Trapezoid Player settings: cycles (U32), duration_us (U32),
      update_frequency_hz (U32), frequency_hz (U32),
      amplitude_volts (Float), vertical_shift_volts (Float),
      ramp_on_us (U32), ramp_off_us (U32)"
    payloadSpec:
      <<: *trapezoid_settings_spec
  TrapezoidSettings3:
    address: 65
    type: U8
    access: Write
    length: 32
    description: "Struct to configure Analog Output Channel 3
      Trapezoid Player settings: cycles (U32), duration_us (U32),
      update_frequency_hz (U32), frequency_hz (U32),
      amplitude_volts (Float), vertical_shift_volts (Float),
      ramp_on_us (U32), ramp_off_us (U32)"
    payloadSpec:
      <<: *trapezoid_settings_spec

bitMasks:
  DOPort:
    description: "Available digital output pins on the device"
    bits:
      None: 0x0
      DO0: 0x1
      DO1: 0x2
      DO2: 0x4
      DO3: 0x8
  AOPort:
    description: "Available +/-10V analog outputs on the device"
    bits:
      None: 0x0
      AO0: 0x1
      AO1: 0x2
      AO2: 0x4
      AO3: 0x8

groupMasks:
  PlayerType:
    description: ""
    values:
      File: 0x0
      Sine: 0x1
      Trapezoid: 0x2
